<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" DisplayName="0.Uno_DAC" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>Uno_DAC</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>2</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="1. File_path" />
        <Property Name="L2. RangeBegin" />
        <Property Name="L3. RangeEdfn" DisplayName="L3. RangeEnd" />
        <Property Name="9. acclimation_time" DisplayName="9. Acclimation_time" />
        <Property Name="5 optistim_pin" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:GetDirectories">
                <io:Path>looming_data</io:Path>
                <io:SearchPattern>*</io:SearchPattern>
                <io:SearchOption>TopDirectoryOnly</io:SearchOption>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Visible</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="1. File_path" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>looming_data</Value>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>file_path</Name>
              <rx:BufferSize xsi:nil="true" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="L2. RangeBegin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0.04</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RangeBegin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="L3. RangeEdfn" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>RangeEnd</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Looming_event</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="5 optistim_pin" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>6</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trigger_out_pin</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="9. acclimation_time" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT10M</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>acclimation_time</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Index" DisplayName="0. Cam" />
        <Property Name="Format" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>800</vid:Width>
              <vid:Height>600</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Cam</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseOr" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject">
          <Name>ROIs</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TimeOut_After_Stim" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Click for UI</Name>
        <Description>V5: start-10min delay-save cam- delay 10s - activity detect in far corner - trigger 10X looming - delay&gt;10s - end</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Visible</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Start</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>Start</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Visible</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>Stop</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>Stop</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="GroupWorkflow">
              <Name>Timer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="TimeSpanProperty">
                      <Value>PT0S</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:IgnoreElements" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>Timing</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Timing</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(str)
def process(value):
  return str(value)[0:10]</ipy:Script>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>Stopwatch</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 14pt, style=Bold</gui:Font>
              <gui:Text>00:12:13.8</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:LabelVisualizer" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>acclimation_time</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT10S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT10M10S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Visible" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>start_stim</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>false</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>start_stim</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>start_stim</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Buttons</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>4</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans>
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
                <gui:CellSpan ColumnSpan="1" RowSpan="1" />
              </gui:CellSpans>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Name>path</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>File_Path:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>file_path</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>FilePath</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>looming_data</gui:Text>
              <gui:Multiline>false</gui:Multiline>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>path</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>User:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>User</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>ZY</gui:Text>
              <gui:Multiline>false</gui:Multiline>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>user</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>Exp_ID:</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>Experiment_ID</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>Test3</gui:Text>
              <gui:Multiline>false</gui:Multiline>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>exp_ID</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Setting</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>6</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>45</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>10</gui:Width>
                </gui:ColumnStyle>
                <gui:ColumnStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Width>15</gui:Width>
                </gui:ColumnStyle>
              </gui:ColumnStyles>
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>Mouse_1</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Text" DisplayName="Mouse ID-1" />
            </Expression>
            <Expression xsi:type="gui:TextBoxBuilder">
              <gui:Name>1</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Font>Microsoft Sans Serif, 12pt, style=Bold</gui:Font>
              <gui:Text>test</gui:Text>
              <gui:Multiline>false</gui:Multiline>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>mouse1</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="gui:TextBoxVisualizer" />
            </Expression>
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Mouse_IDs</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Looming_event</Name>
            </Expression>
            <Expression xsi:type="zg:RollingGraphBuilder">
              <zg:SymbolType>None</zg:SymbolType>
              <zg:LineWidth>1</zg:LineWidth>
              <zg:CurveSettings />
              <zg:Capacity>10800</zg:Capacity>
              <zg:Min xsi:nil="true" />
              <zg:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>Looming Stim</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>5</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>40</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>30</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>30</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Absolute</gui:SizeType>
                  <gui:Height>600</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:Height>0</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>ROIs</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>acclimation_time</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>start_stim</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Stop</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Start</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0.1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="MulticastSubject">
              <Name>Timing</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Start</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Visible</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>start_stim</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="TimeOut_After_Stim" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT30S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Stop</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Stop</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="32" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="32" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="32" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="23" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="23" To="27" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="27" Label="Source2" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source4" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="66" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="51" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="40" To="51" Label="Source2" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="51" Label="Source3" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="51" Label="Source4" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="51" Label="Source5" />
            <Edge From="48" To="49" Label="Source1" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="50" To="51" Label="Source6" />
            <Edge From="51" To="52" Label="Source1" />
            <Edge From="52" To="66" Label="Source2" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="59" Label="Source1" />
            <Edge From="55" To="56" Label="Source1" />
            <Edge From="56" To="57" Label="Source1" />
            <Edge From="57" To="58" Label="Source1" />
            <Edge From="58" To="59" Label="Source2" />
            <Edge From="59" To="60" Label="Source1" />
            <Edge From="60" To="66" Label="Source3" />
            <Edge From="61" To="62" Label="Source1" />
            <Edge From="62" To="66" Label="Source4" />
            <Edge From="63" To="64" Label="Source1" />
            <Edge From="64" To="65" Label="Source1" />
            <Edge From="65" To="66" Label="Source5" />
            <Edge From="66" To="67" Label="Source1" />
            <Edge From="68" To="76" Label="Source1" />
            <Edge From="69" To="70" Label="Source1" />
            <Edge From="70" To="73" Label="Source1" />
            <Edge From="71" To="72" Label="Source1" />
            <Edge From="72" To="73" Label="Source2" />
            <Edge From="73" To="74" Label="Source1" />
            <Edge From="74" To="75" Label="Source1" />
            <Edge From="75" To="76" Label="Source2" />
            <Edge From="76" To="77" Label="Source1" />
            <Edge From="77" To="79" Label="Source1" />
            <Edge From="78" To="79" Label="Source2" />
            <Edge From="79" To="81" Label="Source1" />
            <Edge From="80" To="81" Label="Source2" />
            <Edge From="81" To="82" Label="Source1" />
            <Edge From="83" To="84" Label="Source1" />
            <Edge From="84" To="85" Label="Source1" />
            <Edge From="85" To="86" Label="Source1" />
            <Edge From="85" To="87" Label="Source1" />
            <Edge From="86" To="87" Label="Source2" />
            <Edge From="87" To="88" Label="Source1" />
            <Edge From="88" To="89" Label="Source1" />
            <Edge From="89" To="91" Label="Source1" />
            <Edge From="90" To="91" Label="Source2" />
            <Edge From="91" To="93" Label="Source1" />
            <Edge From="92" To="93" Label="Source2" />
            <Edge From="93" To="94" Label="Source1" />
            <Edge From="95" To="96" Label="Source1" />
            <Edge From="96" To="99" Label="Source1" />
            <Edge From="97" To="98" Label="Source1" />
            <Edge From="98" To="99" Label="Source2" />
            <Edge From="99" To="100" Label="Source1" />
            <Edge From="101" To="103" Label="Source1" />
            <Edge From="102" To="103" Label="Source2" />
            <Edge From="103" To="104" Label="Source1" />
            <Edge From="104" To="105" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Readme</Name>
        <Text><![CDATA[Update in V6: 
1. if no need of TTL, i will record looming internally
2. Screen always on

Ref: Christina C. Koehler et al., Jove 2019 (Using Looming Visual Stimuli to Evaluate Mouse Vision)
1. Cage: 40 cm x 50 cm x 33 cm
2. camera: wide-angle lens with >=60FPS
3. Looming pattern: 2° and expand to 50° over 250 ms, diameter calculated from height.
4. Mouse acclimation: 7-15min one day before with food in far corner, and proir to stim

Protocol: Set parameters > Run > start > place mice > wait until the stimulation button become available > manual stim when mice in perfect location (auto-stim will detect the mice)

Default seeting: 10min acclimation, then cam-recording, 10s later enable stim button, >10s after last stim, then stop automatically

our cage: 40x40x32.5cm, monitor height=30cm
tan(1)*32.5/15 = 0.04 (1.14cm diameter)
tan(25)*32.5/15= 1 (30.31cm diameter)]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>setting</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>path</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>user</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}\{1}</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>BasePath</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>onset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="BitwiseNot" />
      <Expression xsi:type="MulticastSubject">
        <Name>onset</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>start_stim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ISI" DisplayName="L5. ISI" />
        <Property Name="Stim_repeat" DisplayName="L4. Stim_number" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoomStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ISI" />
              <Property Name="Stim_repeat" />
              <Property Name="ITI" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Repeater</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="ISI" />
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>Timer</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>Animation</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RangeBegin</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeBegin" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeEnd" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.25</Duration>
                                <RangeBegin>0.039999999105930328</RangeBegin>
                                <RangeEnd>0.039999999105930328</RangeEnd>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeBegin" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RangeEnd</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeEnd" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.25</Duration>
                                <RangeBegin>0.1</RangeBegin>
                                <RangeEnd>2</RangeEnd>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeBegin" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeEnd" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.5</Duration>
                                <RangeBegin>2</RangeBegin>
                                <RangeEnd>2</RangeEnd>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Concat" />
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Diameter" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:RenderFrame" />
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="FloatProperty">
                                  <Value>0.99</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="ColorA" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                                <Diameter>2</Diameter>
                                <LocationX>0</LocationX>
                                <LocationY>0</LocationY>
                                <Layer>0</Layer>
                                <ColorR>0</ColorR>
                                <ColorG>0</ColorG>
                                <ColorB>0</ColorB>
                                <ColorA>0.99</ColorA>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>66</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>Looming_event</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="BitwiseNot" />
                              <Expression xsi:type="MulticastSubject">
                                <Name>Looming_event</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Stop</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="MulticastSubject">
                                <Name>Looming_event</Name>
                              </Expression>
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="0" To="2" Label="Source1" />
                              <Edge From="0" To="4" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="11" Label="Source1" />
                              <Edge From="4" To="7" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="5" To="9" Label="Source1" />
                              <Edge From="6" To="7" Label="Source2" />
                              <Edge From="7" To="11" Label="Source2" />
                              <Edge From="8" To="10" Label="Source1" />
                              <Edge From="9" To="10" Label="Source2" />
                              <Edge From="10" To="11" Label="Source3" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="17" Label="Source1" />
                              <Edge From="13" To="14" Label="Source1" />
                              <Edge From="14" To="17" Label="Source2" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source3" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="24" Label="Source1" />
                              <Edge From="25" To="26" Label="Source1" />
                              <Edge From="26" To="27" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="DueTime" DisplayName="ISI" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Timer">
                            <rx:DueTime>PT1.6S</rx:DueTime>
                            <rx:Period>PT0S</rx:Period>
                          </Combinator>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Count" DisplayName="Stim_repeat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" DisplayName="ITI" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT10M</rx:DueTime>
                      <rx:Period>PT0S</rx:Period>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="Trial_Num" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:RepeatCount">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>One_Trial</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="ExternalizedMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Stop</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>mouse1</Name>
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>@returns(bool)
def process(value):
  return True if value else False</ipy:Script>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>onset</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="BitwiseAnd" />
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="Width" />
        <Property Name="Height" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>White</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Stop</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>mouse1</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ipy:PythonTransform">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>onset</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseAnd" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:Condition">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Save_Cam</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cam</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Frame_Count</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>count = 0

@returns(int)
def process(value):
  global count
  if value:
    count+=1

  return count</ipy:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Subtract" />
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timestamp" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Timestamp as TimeStamp,
Timestamp.TimeOfDay.TotalMilliseconds as Millis,
Value as Cam_Frame
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cam_csv_name</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BasePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>exp_ID</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>mouse1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_{1}_{2}_cam_.csv</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>looming_data\ZY_Test3_test_cam_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector>TimeStamp,Millis,Cam_Frame</io:Selector>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Avi Name</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BasePath</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>exp_ID</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>mouse1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Format">
                    <Format>{0}_{1}_{2}_.avi</Format>
                    <Selector>Item1,Item2,Item3</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="3" Label="Source2" />
                  <Edge From="2" To="3" Label="Source3" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" Selector="it" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>looming_data\ZY_Test3_test_.avi</cv:FileName>
                <cv:Suffix>Timestamp</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>mouse1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  return True if value else False</ipy:Script>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>onset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>acclimation_time</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="10" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="20" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Save_Looming_TTL</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Looming_event</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Timestamp as TimeStamp,
Timestamp.TimeOfDay.TotalMilliseconds as Millis,
Value as TTL_looming
)</scr:Expression>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BasePath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>exp_ID</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>mouse1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}_{1}_{2}_Looming_.csv</Format>
              <Selector>Item1,Item2,Item3</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>looming_data\ZY_Test3_test_Looming_.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>mouse1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  return True if value else False</ipy:Script>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>onset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>acclimation_time</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT10M</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="12" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="22" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="16" Label="Source1" />
            <Edge From="15" To="16" Label="Source2" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TTL_duration" DisplayName="6. TTL_duration" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TTL_Out</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trigger_out_pin</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Pin" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Uno_DAC</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" DisplayName="TTL_duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2M</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Uno_DAC</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>mouse1</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Script>@returns(bool)
def process(value):
  return True if value else False</ipy:Script>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>onset</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>start_stim</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="BitwiseAnd" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stop</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Trigger_out_pin</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Pin" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>Uno_DAC</ard:PortName>
                <ard:Pin>6</ard:Pin>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="3" To="8" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="19" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="16" Label="Source1" />
            <Edge From="13" To="16" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="46" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="43" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source2" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="51" To="53" Label="Source1" />
      <Edge From="52" To="53" Label="Source2" />
      <Edge From="53" To="60" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="57" Label="Source1" />
      <Edge From="56" To="57" Label="Source2" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="60" Label="Source2" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="64" To="65" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>